# Generated by Configurator on Fri Jun 21 12:33:55 EDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,NIDAQ,NIDAQ,NIDAQHub
Device,NIDAQAO-Dev2/ao0,NIDAQ,NIDAQAO-Dev2/ao0
Device,NIDAQAO-Dev2/ao1,NIDAQ,NIDAQAO-Dev2/ao1
Device,NIDAQDO-Dev2/port0,NIDAQ,NIDAQDO-Dev2/port0
Device,NIDAQDO-Dev2/port1,NIDAQ,NIDAQDO-Dev2/port1
Device,Teensy-SLM,TeensySLM,Teensy-SLM
Device,TUCam,TUCam,TUCam

# Pre-init settings for devices
Property,NIDAQ,Device,Dev2
Property,NIDAQ,MaxSequenceLength,1024
Property,NIDAQAO-Dev2/ao0,MaxVolts,5.0000
Property,NIDAQAO-Dev2/ao0,MinVolts,0.0000
Property,NIDAQAO-Dev2/ao0,Sequencing,Use hub setting
Property,NIDAQAO-Dev2/ao1,MaxVolts,5.0000
Property,NIDAQAO-Dev2/ao1,MinVolts,0.0000
Property,NIDAQAO-Dev2/ao1,Sequencing,Use hub setting
Property,NIDAQDO-Dev2/port0,Input Line,7
Property,NIDAQDO-Dev2/port0,Line # of first slider,0
Property,NIDAQDO-Dev2/port0,Nr of TTL Sliders,4
Property,NIDAQDO-Dev2/port0,Sequencing,Use hub setting
Property,NIDAQDO-Dev2/port1,Input Line,3
Property,NIDAQDO-Dev2/port1,Line # of first slider,0
Property,NIDAQDO-Dev2/port1,Nr of TTL Sliders,3
Property,NIDAQDO-Dev2/port1,Sequencing,Use hub setting
Property,Teensy-SLM,Height,8
Property,Teensy-SLM,Port,COM3
Property,Teensy-SLM,Width,8

# Pre-init settings for COM ports
# Property,COM3,AnswerTimeout,500.0000
# Property,COM3,BaudRate,9600
# Property,COM3,DTR,Disable
# Property,COM3,DataBits,8
# Property,COM3,DelayBetweenCharsMs,0.0000
# Property,COM3,Fast USB to Serial,Disable
# Property,COM3,Handshaking,Off
# Property,COM3,Parity,None
# Property,COM3,StopBits,1
# Property,COM3,Verbose,1

# Hub (parent) references
Parent,NIDAQAO-Dev2/ao0,NIDAQ
Parent,NIDAQAO-Dev2/ao1,NIDAQ
Parent,NIDAQDO-Dev2/port0,NIDAQ
Parent,NIDAQDO-Dev2/port1,NIDAQ

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,TUCam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

